WorkflowBuilder(Version=2.7.0)
ExternalizedMapping(RootPath(Category=Logging), ExperimentName(Category=Logging), LoggerSubjectName(Category=Logging))
-> GroupWorkflow Logging
    ExternalizedMapping(Value(DisplayName=RootPath))
    -> StringProperty(Value=C:\Users\neurogears\Documents\git\PTMonteiro\GoFish_Ajuwon_etal_2022\Data)
    -> Take(Count=1)
    -> AsyncSubject RootPath

    ExternalizedMapping(Value(DisplayName=ExperimentName))
    -> StringProperty(Value=Fish1) => #5
    SubscribeSubject RootPath => #6
    #6, #5 -> Zip
    -> Format(Format={0}\{1}\, Selector="Item1,Item2")
    -> Take(Count=1)
    -> AsyncSubject ExperimentPath

    ExternalizedMapping(Name(DisplayName=LoggerSubjectName))
    -> BehaviorSubject<System.String> EventsSubject => #12
    SubscribeSubject ExperimentPath
    -> Format(Format={0}_Events.csv, Selector=it)
    -> PropertyMapping(FileName) => #15
    #12, #15 -> Bonsai.IO.CsvWriter
      FileName=C:\Users\neurogears\Documents\git\PTMonteiro\GoFish_Ajuwon_etal_2022\Data\Fish1\_Events.csv
      Delimiter=","
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=false
      Selector=""

    SubscribeSubject PumpEventsLEFT
    -> MemberSelector(Selector=MessageBytes) => #18
    SubscribeSubject ExperimentPath
    -> Format(Format={0}_PumpEventsLEFT.bin, Selector=it)
    -> PropertyMapping(Path) => #21
    #18, #21 -> Bonsai.Dsp.MatrixWriter
      Path=C:\Users\neurogears\Documents\git\PTMonteiro\GoFish_Ajuwon_etal_2022\Data\Fish1\_PumpEventsLEFT.bin
      Suffix=Timestamp
      Overwrite=false
      Layout=ColumnMajor

    SubscribeSubject PumpEventsRIGHT
    -> MemberSelector(Selector=MessageBytes) => #24
    SubscribeSubject ExperimentPath
    -> Format(Format={0}_PumpEventsRIGHT.bin, Selector=it)
    -> PropertyMapping(Path) => #27
    #24, #27 -> Bonsai.Dsp.MatrixWriter
      Path=C:\Users\neurogears\Documents\git\PTMonteiro\GoFish_Ajuwon_etal_2022\Data\Fish1\_PumpEventsRIGHT.bin
      Suffix=Timestamp
      Overwrite=false
      Layout=ColumnMajor

    SubscribeSubject VideoFeed => #29
    SubscribeSubject ExperimentPath
    -> Format(Format={0}_Video.avi, Selector=it)
    -> PropertyMapping(FileName) => #32
    #29, #32 -> Bonsai.Vision.VideoWriter
      FileName=C:\Users\neurogears\Documents\git\PTMonteiro\GoFish_Ajuwon_etal_2022\Data\Fish1\_Video.avi
      Suffix=Timestamp
      Buffered=true
      Overwrite=false
      FourCC=FMP4
      FrameRate=30
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
    -> Timestamp
    -> MemberSelector(Selector=Timestamp) => #35
    SubscribeSubject ExperimentPath
    -> Format(Format={0}_video_timestamp.csv, Selector=it)
    -> PropertyMapping(FileName) => #38
    #35, #38 -> Bonsai.IO.CsvWriter
      FileName=C:\Users\neurogears\Documents\git\PTMonteiro\GoFish_Ajuwon_etal_2022\Data\Fish1\_video_timestamp.csv
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true

    SubscribeSubject centroid => #40
    SubscribeSubject stimLum => #41
    #41, #40 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #43
      Expression: new(Item2.X as X, Item2.Y as Y, Item1 as Luminance)
    SubscribeSubject ExperimentPath
    -> Format(Format={0}_Tracking.csv, Selector=it)
    -> PropertyMapping(FileName) => #46
    #43, #46 -> Bonsai.IO.CsvWriter
      FileName=C:\Users\neurogears\Documents\git\PTMonteiro\GoFish_Ajuwon_etal_2022\Data\Fish1\_Tracking.csv
      Append=false
      Overwrite=false
      Suffix=Timestamp
      IncludeHeader=true

ExternalizedMapping(LeftFeeder_COM(Category=Hardware), RightFeeder_COM(Category=Hardware))
-> GroupWorkflow Hardware
    GroupWorkflow "BonVision Resources"
        Bonsai.Shaders.CreateWindow
          Width=640
          Height=480
          VSync=On
          SwapSync=false
          ClearColor=Gray
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=true
          Location(X=0, Y=0)
          WindowBorder=Resizable
          WindowState=Normal
          DisplayDevice=First
          TargetRenderFrequency=60
          TargetUpdateFrequency=nil
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
        -> Bonsai.Shaders.TextureResources
          Textures
            TextureConfiguration=Bonsai.Shaders.ImageTexture
              Name=white-noise
              Width=nil
              Height=nil
              InternalFormat=Rgba
              WrapS=Repeat
              WrapT=Repeat
              MinFilter=Linear
              MagFilter=Linear
              FileName=Resources\whitenoise.png
              ColorType=Unchanged
              FlipMode=Vertical
        -> Bonsai.Resources.LoadResources
        -> WorkflowOutput

        Bonsai.Shaders.RenderFrame
        -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
        -> PublishSubject Draw

    ExternalizedMapping(PortName(DisplayName=LeftFeeder_COM)) => #1
    BehaviorSubject<Bonsai.Harp.HarpMessage> PumpCmdLEFT => #2
    #2, #1 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Enable, IgnoreErrors=false, PortName=COM7)
    -> PublishSubject PumpEventsLEFT

    ExternalizedMapping(PortName(DisplayName=RightFeeder_COM)) => #5
    BehaviorSubject<Bonsai.Harp.HarpMessage> PumpCmdRIGHT => #6
    #6, #5 -> Bonsai.Harp.Device(DeviceState=Active, DumpRegisters=true, LedState=On, VisualIndicators=On, Heartbeat=Enable, IgnoreErrors=false, PortName=COM8)
    -> PublishSubject PumpEventsRIGHT

    IntProperty(Value=80)
    -> Bonsai.Harp.CF.SyringePumpCommand(Type=ProtocolNumberOfSteps) => #10
    -> MulticastSubject PumpCmdLEFT
    #10 -> MulticastSubject PumpCmdRIGHT

    ExternalizedMapping(Format, CaptureProperties)
    -> Bonsai.Video.VideoCaptureDevice(Index=0, Format(FrameSize(Width=640, Height=480), AverageFrameRate=30, MaximumFrameRate=30, BitCount=24), CaptureProperties="")
    -> PublishSubject VideoFeed

    Disable Bonsai.Vision.FileCapture
      FileName=C:\Users\neurogears\Documents\git\PTMonteiro\GoFish_Ajuwon_etal_2022\Data\coco_raw_2021-08-16T13_58_50.avi
      PlaybackRate=0
      StartPosition=0
      PositionUnits=Frames
      Loop=false
      Playing=true
    -> Disable PublishSubject VideoFeed

ExternalizedMapping(trialListPath)
-> GroupWorkflow Initialization
    ExternalizedMapping(FileName(DisplayName=trialListPath))
    -> Bonsai.IO.CsvReader(FileName=TrialList_splusLandR_colours.csv, ScanPattern="%i,%i,%i,%i,%i", SkipRows=1)
    -> Bonsai.Numerics.Permutation
    -> ToList
    -> BehaviorSubject TrialList

    IntProperty(Value=0)
    -> BehaviorSubject AccumulatedRewards

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    Defer DrawFirstSide
        Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1)
        -> Bonsai.Numerics.Distributions.Sample
        -> WorkflowOutput
    -> BehaviorSubject baited_Side

    IntProperty(Value=0)
    -> BehaviorSubject trialType

    IntProperty(Value=0)
    -> BehaviorSubject stimLEFT

    IntProperty(Value=0)
    -> BehaviorSubject stimRIGHT

    IntProperty(Value=0)
    -> BehaviorSubject rwdLEFT

    IntProperty(Value=0)
    -> BehaviorSubject rwdRIGHT

    PublishSubject<System.Boolean> right_side_crossed
    PublishSubject<System.Boolean> left_side_crossed
    PublishSubject<System.Boolean> start_position_crossed
    PublishSubject<OpenCV.Net.Point2f> centroid
    DoubleProperty(Value=0)
    PublishSubject<System.Double> stimLum

GroupWorkflow Tracking
    SubscribeSubject VideoFeed => #0
    -> Bonsai.Vision.Crop(RegionOfInterest(X=268, Y=101, Width=1002, Height=496))
    -> Bonsai.Vision.ConvertColor(Conversion=Bgr2Hsv)
    -> Bonsai.Vision.HsvThreshold(Lower(Val0=0, Val1=66, Val2=0, Val3=0), Upper(Val0=164, Val1=255, Val2=255, Val3=0)) => #3
    -> GroupWorkflow "Right ROI"
        WorkflowInput Source1 => #0
        ExternalizedMapping(RegionOfInterest(DisplayName=Right_ROI, Category=ROI)) => #1
        #0, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=37, Y=33, Width=229, Height=213))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #4
        ExternalizedMapping(Value(DisplayName=Right_Thr, Category=ROI_Threshold)) => #5
        #4, #5 -> GreaterThan(Operand=DoubleProperty(Value=3))
        -> MulticastSubject right_side_crossed
        -> WorkflowOutput
    #3 -> GroupWorkflow "Left ROI"
        WorkflowInput Source1 => #0
        ExternalizedMapping(RegionOfInterest(DisplayName=Left_ROI, Category=ROI)) => #1
        #0, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=58, Y=259, Width=206, Height=230))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #4
        ExternalizedMapping(Value(DisplayName=Left_Thr, Category=ROI_Threshold)) => #5
        #4, #5 -> GreaterThan(Operand=DoubleProperty(Value=3))
        -> MulticastSubject left_side_crossed
        -> WorkflowOutput
    #3 -> GroupWorkflow "Start Position ROI"
        WorkflowInput Source1 => #0
        ExternalizedMapping(RegionOfInterest(DisplayName=Start_ROI, Category=ROI)) => #1
        #0, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=803, Y=174, Width=196, Height=141))
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #4
        ExternalizedMapping(Value(DisplayName=Start_Thr, Category=ROI_Threshold)) => #5
        #4, #5 -> GreaterThan(Operand=DoubleProperty(Value=3))
        -> MulticastSubject start_position_crossed
        -> WorkflowOutput
    #3 -> GroupWorkflow "Fish Tracker"
        WorkflowInput Source1
        -> Bonsai.Vision.MorphologicalOperator(Size(Width=10, Height=10), Anchor(X=-1, Y=-1), Shape=Ellipse, Iterations=1, Operation=Dilate)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=600, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Bonsai.Vision.LargestBinaryRegion
        -> Bonsai.Vision.Centroid
        -> MulticastSubject centroid
        -> WorkflowOutput
    #0 -> GroupWorkflow SyncTracker
        WorkflowInput Source1 => #0
        ExternalizedMapping(RegionOfInterest(DisplayName=Sync_ROI, Category=ROI)) => #1
        #0, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=38, Y=339, Width=10, Height=32))
        -> Bonsai.Vision.Grayscale
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0)
        -> MulticastSubject stimLum
        -> WorkflowOutput

GroupWorkflow "Task Control"
    ExternalizedMapping(Value(DisplayName=MaxTrials, Category=MaxTrials)) => #0
    ExternalizedMapping(Lower(Category=ITI), Upper(Category=ITI))
    -> Defer DrawITI
        ExternalizedMapping(Lower, Upper)
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=1, Upper=2)
        -> Bonsai.Numerics.Distributions.Sample
        -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=-1, EventName=ITIon, TargetSubject=EventsSubject)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT1.618S)
        -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=-1, EventName=ITIoff, TargetSubject=EventsSubject)
        -> Take(Count=1)
        -> WorkflowOutput

        SubscribeSubject Draw
        -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0, LocationY=0.5, Layer=0, Diameter=10, ColorR=0, ColorG=0, ColorB=0, ColorA=1)
    -> SelectMany updateTrialList
        SubscribeSubject TrialList => #0
        SubscribeSubject TrialNumber
        -> PropertyMapping(Value) => #2
        #0, #2 -> Index(Operand=IntProperty(Value=2))
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            it.Item1 as trial_type,
            it.Item2 as stim_left,
            it.Item3 as stim_right,
            it.Item4 as rwd_left,
            it.Item5 as rwd_right
            )
        -> BehaviorSubject "Trial Settings"

        SubscribeSubject "Trial Settings"
        -> MemberSelector(Selector=stim_left)
        -> MulticastSubject stimLEFT

        SubscribeSubject "Trial Settings"
        -> MemberSelector(Selector=stim_right)
        -> MulticastSubject stimRIGHT

        SubscribeSubject "Trial Settings"
        -> MemberSelector(Selector=rwd_left)
        -> MulticastSubject rwdLEFT

        SubscribeSubject "Trial Settings"
        -> MemberSelector(Selector=rwd_right)
        -> MulticastSubject rwdRIGHT

        SubscribeSubject "Trial Settings"
        -> MemberSelector(Selector=trial_type)
        -> MulticastSubject trialType
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany StartPosition
        SubscribeSubject start_position_crossed
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Stim_control => #5
        SubscribeSubject trialType
        -> InputMapping(EventValue(Selector=it))
        -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=2, EventName=trialInit, TargetSubject=EventsSubject)
        -> Condition isBOTH
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> SelectMany LEFTorRIGHT => #4
            SubscribeSubject Draw
            -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0, LocationY=0.9, Layer=0, Diameter=0.1, ColorR=1, ColorG=1, ColorB=1, ColorA=1)

            SubscribeSubject left_side_crossed
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=0) => #4
            SubscribeSubject right_side_crossed
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=1) => #7
            #4, #7 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput

            SubscribeSubject stimLEFT
            -> Condition 1-4?
                WorkflowInput Source1 => #0
                -> LessThan(Operand=IntProperty(Value=5)) => #1
                #0 -> GreaterThan(Operand=IntProperty(Value=0)) => #2
                #2, #1 -> Zip
                -> BitwiseAnd
                -> WorkflowOutput
            -> InputMapping(EventValue(Selector=it))
            -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=4, EventName=stimLeft, TargetSubject=EventsSubject)
            -> SelectMany DrawStimLeft
                WorkflowInput Source1 => #0
                -> Condition 1
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> Bonsai.Shaders.CreateVector4(X=1, Y=0, Z=0, W=1) => #2
                #0 -> Condition 2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=2))
                    -> WorkflowOutput
                -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=1, W=1) => #4
                #0 -> Condition 3
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=3))
                    -> WorkflowOutput
                -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1) => #6
                #0 -> Condition 4
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=4))
                    -> WorkflowOutput
                -> Bonsai.Shaders.CreateVector4(X=0, Y=1, Z=0, W=1) => #8
                #2, #4, #6, #8 -> Merge
                -> Take(Count=1)
                -> AsyncSubject StimColor

                SubscribeSubject Draw => #12
                SubscribeSubject StimColor
                -> PropertyMapping(ColorA(Selector=W), ColorB(Selector=X), ColorG(Selector=Y), ColorR(Selector=Z)) => #14
                #12, #14 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=-0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=0, ColorG=1, ColorB=0, ColorA=1)

            SubscribeSubject stimRIGHT
            -> Condition 1-4?
                WorkflowInput Source1 => #0
                -> LessThan(Operand=IntProperty(Value=5)) => #1
                #0 -> GreaterThan(Operand=IntProperty(Value=0)) => #2
                #2, #1 -> Zip
                -> BitwiseAnd
                -> WorkflowOutput
            -> InputMapping(EventValue(Selector=it))
            -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=3, EventName=stimRIGHT, TargetSubject=EventsSubject)
            -> SelectMany DrawStimRight
                WorkflowInput Source1 => #0
                -> Condition 1
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=1))
                    -> WorkflowOutput
                -> Bonsai.Shaders.CreateVector4(X=1, Y=0, Z=0, W=1) => #2
                #0 -> Condition 2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=2))
                    -> WorkflowOutput
                -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=1, W=1) => #4
                #0 -> Condition 3
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=3))
                    -> WorkflowOutput
                -> Bonsai.Shaders.CreateVector4(X=1, Y=1, Z=1, W=1) => #6
                #0 -> Condition 4
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value) => #1
                    #0, #1 -> Equal(Operand=IntProperty(Value=4))
                    -> WorkflowOutput
                -> Bonsai.Shaders.CreateVector4(X=0, Y=1, Z=0, W=1) => #8
                #2, #4, #6, #8 -> Merge
                -> Take(Count=1)
                -> AsyncSubject StimColor

                SubscribeSubject Draw => #12
                SubscribeSubject StimColor
                -> PropertyMapping(ColorA(Selector=W), ColorB(Selector=X), ColorG(Selector=Y), ColorR(Selector=Z)) => #14
                #12, #14 -> IncludeWorkflow(Path=BonVision:Primitives.DrawCircle.bonsai, LocationX=0.4, LocationY=-0.7, Layer=0, Diameter=0.2, ColorR=1, ColorG=1, ColorB=1, ColorA=1)
        -> Condition choseLEFT
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> InputMapping(EventValue(Selector=it))
        -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=0, EventName=choiceLEFT, TargetSubject=EventsSubject) => #7
        #4 -> Condition choseRIGHT
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> InputMapping(EventValue(Selector=it))
        -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=-1, EventName=choiceRight, TargetSubject=EventsSubject) => #10
        #4 -> Condition noCHOICE
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=-1))
            -> WorkflowOutput
        -> InputMapping(EventValue(Selector=it))
        -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=-1, EventName=choiceDeadline, TargetSubject=EventsSubject) => #13
        #7, #10, #13 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> Condition Success
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=-1))
        -> BitwiseNot
        -> WorkflowOutput
    -> SelectMany Food_delivery
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject choice

        SubscribeSubject rwdLEFT => #3
        SubscribeSubject rwdRIGHT => #4
        SubscribeSubject choice
        -> Condition isLEFT => #6
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        #6, #3 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #8
        -> Condition giveFOOD
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> InputMapping(EventValue(Selector=it))
        -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=1, EventName=foodLEFT, TargetSubject=EventsSubject)
        -> BooleanProperty(Value=true)
        -> Bonsai.Harp.CF.SyringePumpCommand(Type=EnableProtocol)
        -> MulticastSubject PumpCmdLEFT
        -> IntProperty(Value=0) => #15
        #8 -> Condition noFOOD
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> InputMapping(EventValue(Selector=it))
        -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=0, EventName=foodLEFT, TargetSubject=EventsSubject)
        -> IntProperty(Value=0) => #19
        SubscribeSubject choice
        -> Condition isRIGHT => #21
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        #21, #4 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #23
        -> Condition giveFOOD
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> InputMapping(EventValue(Selector=it))
        -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=0, EventName=foodRIGHT, TargetSubject=EventsSubject)
        -> BooleanProperty(Value=true)
        -> Bonsai.Harp.CF.SyringePumpCommand(Type=EnableProtocol)
        -> MulticastSubject PumpCmdRIGHT
        -> IntProperty(Value=0) => #30
        #23 -> Condition noFOOD
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> InputMapping(EventValue(Selector=it))
        -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=0, EventName=foodRIGHT, TargetSubject=EventsSubject)
        -> IntProperty(Value=0) => #34
        #15, #19, #30, #34 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany SuccessCounter => #8
        SubscribeSubject AccumulatedRewards => #0
        WorkflowInput Source1 => #1
        #1, #0 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject AccumulatedRewards
        -> Take(Count=1)
        -> WorkflowOutput
    #5 -> Condition Miss => #9
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=-1))
        -> WorkflowOutput
    #8, #9 -> Merge
    -> SelectMany Trial_counter
        SubscribeSubject TrialNumber => #0
        WorkflowInput Source1 => #1
        #1, #0 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject TrialNumber
        -> InputMapping(EventValue(Selector=it))
        -> IncludeWorkflow(Path=Extensions\eventLogger.bonsai, EventValue=2, EventName=TrialNumber, TargetSubject=EventsSubject)
        -> Take(Count=1)
        -> WorkflowOutput
    -> Repeat => #12
    #12, #0 -> Condition check_end
        ExternalizedMapping(Value) => #0
        SubscribeSubject AccumulatedRewards => #1
        #1, #0 -> Equal(Operand=IntProperty(Value=24))
        -> WorkflowOutput
    -> Bonsai.Shaders.Delay(DueTime=PT0S)
    -> Take(Count=1)
    -> WorkflowOutput
-> WorkflowOutput

Disable GroupWorkflow Visualisation
    Bonsai.Shaders.UpdateFrame
    -> Bonsai.Shaders.ReadPixels(RegionOfInterest=nil)
    -> Bonsai.Vision.Resize(Size(Width=640, Height=480), Interpolation=Linear) => #2
    SubscribeSubject VideoFeed
    -> Bonsai.Vision.Crop(RegionOfInterest(X=268, Y=101, Width=1002, Height=496))
    -> Bonsai.Vision.Resize(Size(Width=640, Height=480), Interpolation=Linear) => #5
    #2, #5 -> WithLatestFrom
    -> Bonsai.Dsp.Concat(Axis=0)
    -> WorkflowOutput

GroupWorkflow "Manual Override"
    Bonsai.Shaders.Input.KeyDown(Key=Down, Modifiers=Control)
    -> BooleanProperty(Value=true)
    -> MulticastSubject start_position_crossed

    Bonsai.Shaders.Input.KeyDown(Key=Right, Modifiers=Control)
    -> BooleanProperty(Value=true)
    -> MulticastSubject right_side_crossed

    Bonsai.Shaders.Input.KeyDown(Key=Left, Modifiers=Control)
    -> BooleanProperty(Value=true)
    -> MulticastSubject left_side_crossed
